PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '', 'group': "['A', 'B']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Questionnaire_music1.csv']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[1,1,1]
  expName = Pilot_online_tryings
  keyboardBackend = ioHub
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Routines
  Routine instructions
    TextComponent text_2
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = $cond
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    CodeComponent code_2
      Code Type = JS
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      Begin JS Routine:
        if (expInfo['group'] == "A") {
            cond = condA;
        } else {
            cond = condB;
        }
  Routine try_2
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = ***
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    SoundComponent sound_1
      sound = try.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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    CodeComponent check_resp
      Code Type = Py
      Begin Routine:
        event.clearEvents()
      Each Frame:
        for tecla in event.getKeys():
            if tecla in ['space']:
                loop_training.finished = 1 #way to say to exit of a condiition satisfied
  Routine Learning_test
    SoundComponent test_sound
      sound [set every repeat] = $audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
      store = all keys
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
      text = Pulsa 'espacio' cuando escuches -ki
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  Routine offline_test
    SoundComponent offline_audio
      sound [set every repeat] = $audiodir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.4
      text = ***
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  Routine offline_question
    ImageComponent image
      image = question2.png
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_7
      color = black
      letterHeight = 0.05
      pos = (0, +0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Cuanto te pareció parte del lenguaje?
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    TextComponent text_8
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Diferente                                               Igual
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    KeyboardComponent Offline_resp
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine end
    TextComponent text_10
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Muchas gracias por tu partecipacion! 
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  Routine ___
    TextComponent text_11
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ***
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  Routine sequences
    SoundComponent seqs
      saveStartStop = False
      sound [set every repeat] = $dirs
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.664
      syncScreenRefresh = False
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    TextComponent text_13
      color [set every frame] = $colour
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.664
      text [set every frame] = $cond
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    KeyboardComponent syllable_catch
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.664
      store = all keys
      syncScreenRefresh = False
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    CodeComponent code_3
      Code Type = JS
      Begin JS Routine:
        if (expInfo['group'] == "A") {
            time = timeA;
        } else {
            time = timeB;
        }
  Routine test_instructions
    TextComponent text_12
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Ahora empezará la Fase 3 (reconocimiento de fragmentos) de este lenguaje .
        Escucharás diferentes fragmentos del lenguaje que has escuchado anteriormente. Algunos de estos fragmentos coincidirán con partes del lenguaje previamente escuchado, mientras que otros serán muy similares pero presentarán algunas diferencias.

        *pulsa espacio para continuar*
    KeyboardComponent key_resp4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test_instructions2
    TextComponent text_14
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Tu tarea consiste en:

        1. Decir si el segmento escuchado es o no es parte del lenguaje escuchado, pulsando:

        Botón Z de tu teclado = Sí, es parte del lenguaje.
        Botón M de tu teclado = No, no es parte del lenguaje.

        2- Decirnos qué tan seguro estás de tu respuesta, en una escala del 1 (poco seguro) al 7 (muy seguro).

        *pulsa espacio para continuar*
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test_instructions3
    TextComponent text_15
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Antes de empezar, ahora harás una prueba de la tarea que vas a hacer.

        *pulsa espacio para continuar*
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prueba_test
    SoundComponent sound_2
      sound = R2.1.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
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    TextComponent text_16
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.4
      text = *
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  Routine audio
    SoundComponent test_sounds
      saveStartStop = False
      sound [set every repeat] = $test
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2.664
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    TextComponent text_17
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.9
      text = *
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  Routine question1
    TextComponent text_18
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Es parte del lenguaje original?

        SI                                               NO
        (-z)                                           (-m)
    KeyboardComponent Partz_no_partm
      allowedKeys = 'z','m'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine welcomw
    TextComponent text_21
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Antes de empezar con el experimento, te pedimos por favor que:

        -Te pongas unos cascos o auriculares para escuchar mejor y evitar distracciones.
        -Te sitúes en una habitación silenciosa.
        -Estés concentrado y sin distracciones durante la tarea.
        -Te asegures de no tener interrupciones en los próximos 45 minutos.
        -Apagues tu móvil.

        *pulsa espacio para continuar*
    KeyboardComponent key_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome1
    TextComponent text_23
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Gracias por tu paciencia! Ahora empezaremos con el experimento.

        Esta tarea te tomará aproximadamente 45 minutos, durante los cuales te pediremos que escuches atentamente cuatro lenguajes artificiales.

        *pulsa espacio para continuar*
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine instructions_2
    TextComponent text_24
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Gracias. Ahora, unas instrucciones generales:
        Para cada uno de los cuatro lenguajes, tendrás tres fases.


        *pulsa espacio para continuar*
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine Instructions_task_1
    TextComponent text_22
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Fase 2: Detección de sílabas.

        En la segunda fase tu tarea consistirá en responder lo más rápido posible cuando oigas una sílaba específica mientras escuchas el mismo lenguaje. La sílaba objetivo se presentará en el centro de la pantalla y tu tarea será pulsar la tecla "espacio" lo más rápido posible cada vez que creas escucharla.

        *pulsa espacio para continuar*
    KeyboardComponent key_resp1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Intructions_task2
    TextComponent text_25
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Fase 3: Reconocimiento del lenguaje.

        En la tercera fase, tu tarea consistirá en escuchar diferentes fragmentos del lenguaje que has escuchado anteriormente. Algunos de estos fragmentos coincidirán con partes del lenguaje previamente escuchado, mientras que otros serán muy similares, pero presentarán algunas diferencias. Tu objetivo será intentar reconocer qué fragmentos coinciden con el lenguaje previamente escuchado y expresar tu nivel de seguridad respecto a tu respuesta.

        *pulsa espacio para continuar*
    KeyboardComponent key_resp1_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine volume
    TextComponent text_26
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Antes de empezar, te pediremos que ajustes el volumen de tu ordenador a un nivel de escucha cómodo. Para hacerlo, deberás utilizar directamente las teclas del teclado de tu ordenador, ya que una vez dentro de esta interfaz no podrás manipular el volumen de forma externa. La voz que escucharás para ajustar el volumen será la misma que escucharás en los cuatro lenguajes siguentes.

        *pulsa espacio para continuar*
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine volume_setting
    SoundComponent volume_set
      saveStartStop = False
      sound = volume.wav
      startVal [time (s)] = 0.0
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    KeyboardComponent key_ressp2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_27
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *pulsa espacio cuando acabes de regular el volumen al nivel correcto*
      wrapWidth = 1.3
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  Routine ready_
    TextComponent text_28
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Resumen de las tres fases para cada uno de los cuatro lenguajes:

        - Fase 1: Escucha atenta.

        - Fase 2: Detección de sílabas durante la escucha del lenguaje.

        - Fase 3: Reconocimiento de fragmentos del lenguaje.

        *pulsa espacio para continuar*
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine ready_2
    TextComponent text_29
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        ¡Empezamos con el primer lenguaje!

        *pulsa espacio para continuar*
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine Next_langauge
    TextComponent text_30
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        ¡Gracias! Has terminado con este lenguaje.

        *pulsa espacio para continuar*
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine Task_1
    TextComponent text_31
      color = black
      letterHeight = 0.05
      opacity = 1.3
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Ahora comenzará la Fase 2 (Detección de sílabas) de este lenguaje.

        La sílaba objetivo se presentará en el centro de la pantalla y tu tarea será pulsar la tecla "espacio" lo más rápido posible cada vez que creas escucharla.


        *pulsa espacio para continuar*
    KeyboardComponent key_resp1_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine question_2
    TextComponent text_32
      color = black
      letterHeight = 0.05
      pos = (0, 0.10)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Qué tan seguro estás de tu respuesta?
    ImageComponent image_2
      image = question2.png
      saveStartStop = False
      size = (0.8, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent text_33
      color = black
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Poco                  Bastante                 Mucho
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    KeyboardComponent security_1_7
      allowedKeys = '1','2','3','4','5','6','7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent text_34
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Una vez que pulsera espacio la primera fase del proximo lenguaje empezara.

        *pulsa espacio para continuar*
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ready_loop
    TextComponent text_36
      color = black
      letterHeight = 0.05
      opacity = 1.3
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Una vez pulses  'espacio', comenzará la Fase 1 (Escucha atenta) del próximo lenguaje.

        Por favor, intenta escuchar el lenguaje con la máxima atención, escuchando cada sílaba e imaginando que escuchas un lenguaje real.


        *pulsa espacio para continuar*
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine Instructions_0
    TextComponent text_37
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Fase 1: Escucha atenta.

        La primera fase consistirá en una tarea de escucha atenta. Aquí deberás escuchar con mucha atención el lenguaje, imaginando que se trata de un lenguaje real.

        *pulsa espacio para continuar*
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine comentario
    TextboxComponent END_textbox
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (1, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent text_38
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Dejas aquí tu comentario:
    TextComponent text_39
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa aquí para terminar el experimento.
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    MouseComponent mouse
      clickable = text_11
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        text_11 = visual.TextStim(win=win, name='text_11',
            text='Pulsa acquì para terminar el experimento',
            font='Open Sans',
            pos=(0, -0.3), height=0.05, wrapWidth=None, ori=0.0,
            color='black', colorSpace='rgb', opacity=None, bold= True,
            languageStyle='LTR',
            depth=-2.0);
  Routine gracias_2
    TextComponent text_40
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        ¡Has acabado con el experimento!  ¡Gracias!

        Antes de acabar nos gustaría que nos digas cómo ha ido la tarea.  Si has tenido algún problema, interrupción, distracción o cualquier otra información que creas importante comentar, por favor, déjalo por escrito en la ventana siguiente. Si no ha ocurrido nada, simplemente escribe 'nada'. ¡Muchas gracias!

        *pulsa espacio para acceder a la ventana donde dejar tu comentario*
    KeyboardComponent key_resp6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine preguntas_rhytmos
    TextComponent text_42
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias! Antes de terminar el experimento, te haremos dos preguntas sobre los cuatro lenguajes que acabas de escuchar.


        *pulsa espacio para continuar*
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine question_answer
    TextComponent text_44
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0
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      text [set every repeat]:
        $pregunta
    KeyboardComponent complex_1_2_3_4
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_45
      color = black
      letterHeight = 0.05
      pos = (0, -0.13)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        L 1            L 2            L3            L4
        ('1')          ('2')          ('3')         ('4')


        *pulsa el numero correspondiente al lenguaje escogido para responder*
  Routine question
    TextComponent text_43
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 51
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      text [set every repeat]:
        $pregunta
    SoundComponent sound_5
      sound [set every repeat] = $L1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 10.65
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    SoundComponent sound_6
      sound [set every repeat] = $L2
      startVal [time (s)] = 16
      stopVal [duration (s)] = 10.65
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    SoundComponent sound_7
      sound [set every repeat] = $L3
      startVal [time (s)] = 28
      stopVal [duration (s)] = 10.65
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    ImageComponent image_4
      image = sound_icon.png
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 47
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    TextboxComponent textbox_2
      bold = True
      color = black
      editable = False
      letterHeight = 0.05
      pos = (-0.21, -0.1)
      size = (1, 0.45)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 10.7
      text = L 1
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    SoundComponent sound_3
      sound [set every repeat] = $L4
      startVal [time (s)] = 40
      stopVal [duration (s)] = 10.65
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    TextboxComponent textbox_4
      bold = True
      color = black
      editable = False
      letterHeight = 0.05
      pos = (-0.21, -0.1)
      size = (1, 0.45)
      startVal [time (s)] = 16
      stopVal [duration (s)] = 10.7
      text = L 2
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    TextboxComponent textbox_5
      bold = True
      color = black
      editable = False
      letterHeight = 0.05
      pos = (-0.21, -0.1)
      size = (1, 0.45)
      startVal [time (s)] = 28
      stopVal [duration (s)] = 10.7
      text = L 3
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    TextboxComponent textbox_6
      bold = True
      color = black
      editable = False
      letterHeight = 0.05
      pos = (-0.21, -0.1)
      size = (1, 0.45)
      startVal [time (s)] = 40
      stopVal [duration (s)] = 10.7
      text = L 4
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  Routine firs_questionaire_intro
    TextComponent text_47
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $preguntas_musica1
      wrapWidth = 1.3
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    TextComponent text_48
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *pulsa espacio una vez que hayas seleccionado tu respuesta*
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    SliderComponent BMRQ_answer
      borderColor = black
      color = black
      fillColor = -1.0000, 1.0000, 1.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = (1,2,3,4,5)
      letterHeight = 0.03
      saveStartStop = False
      size = (1.15, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0,1,2,3,4)
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    ImageComponent image_6
      image = question_music1.png
      pos = (0,-0.1)
      saveStartStop = False
      size = (1.4, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = JS
      Begin JS Routine:
        event.clearEvents();
      Each JS Frame:
        if (BMRQ_answer.getRating() !== undefined) {
            keys= psychoJS.eventManager.getKeys({keyList: ['space']});
            if (keys.length > 0) {
                continueRoutine= false;
            }
        }else{
            event.clearEvents();
        }
  Routine intro_questionaire1
    TextComponent text_49
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        ¡Gracias! Ahora seguirá un cuestionario que hace preguntas más específicas sobre tus actitudes en relación a la música.

        Cada ítem de este cuestionario es una afirmación con la que se puede estar de acuerdo o en desacuerdo. Para cada ítem, indica en qué grado estás de acuerdo o en desacuerdo con lo que dice el ítem, desde una escala de 1 ( completamente en desacuerdo) hasta 5 (completamente de acuerdo)

        *pulsa espacio para al cuestionario*
    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine partitura
    TextComponent text_68
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        ¿Sabes leer partitura musical?

        *marca la casilla correspondiente a tu respuesta*
    TextComponent text_69
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *pulsa espacio una vez que hayas seleccionado tu respuesta*
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    SliderComponent partiture_answer
      borderColor = black
      color = black
      fillColor = -1.0000, 1.0000, 1.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = ('No','Si')
      letterHeight = 0.04
      saveStartStop = False
      size = (0.2, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0,1)
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    CodeComponent code_17
      Code Type = JS
      Begin JS Experiment:
        event.clearEvents();
      Each JS Frame:
        if (partiture_answer.getRating() !== undefined) {
            keys= psychoJS.eventManager.getKeys({keyList: ['space']});
            if (keys.length > 0) {
                continueRoutine= false;
            }
        }else{
            event.clearEvents();
        }
  Routine instrument_age
    TextComponent text_20
      color = black
      letterHeight = 0.04
      opacity = 1.5
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Por favor, para cada casilla escribe uno de los instrumentos que has tocado/tocas (incluyendo el canto). En la casilla correspondiente al lado, indica la edad a la cual empezaste a estudiar el instrumento de interés. Si no tocas/has tocado ningún instrumento simplemente escribe 'nada' en las dos primeras casillas.
      wrapWidth = 1.3
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    TextComponent text_35
      color = black
      letterHeight = 0.04
      opacity = 1.3
      pos = (-0.25,0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instrumento:
      wrapWidth = 1.3
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    TextboxComponent instr_type_answer_1
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      flipVert = True
      letterHeight = 0.03
      pos = (-0.25, 0.13)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent text_41
      color = black
      letterHeight = 0.04
      opacity = 1.3
      pos = (0.25,0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Edad a la que empezaste:
      wrapWidth = 1.3
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    TextboxComponent instr_age_answer_1
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.03
      pos = (0.25, 0.13)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent text_83
      color = black
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa aquí para continuar.
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    TextboxComponent instr_type_answer_2
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      flipVert = True
      letterHeight = 0.03
      pos = (-0.25, 0.06)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent instr_age_answer_2
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.03
      pos = (0.25, 0.06)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent instr_type_answer_3
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      flipVert = True
      letterHeight = 0.03
      pos = (-0.25, -0.01)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent instr_age_answer_3
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.03
      pos = (0.25, -0.01)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent instr_type_answer_4
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      flipVert = True
      letterHeight = 0.03
      pos = (-0.25, -0.08)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent instr_age_answer_4
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.03
      pos = (0.25, -0.08)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent instr_type_answer_5
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      flipVert = True
      letterHeight = 0.03
      pos = (-0.25, -0.15)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent instr_age_answer_5
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.03
      pos = (0.25, -0.15)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_7
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_16
      Code Type = JS
      Each JS Frame:
        if (instr_type_answer_1.getText()!== '' && instr_age_answer_1.getText() !== '') {
            if (mouse.isPressedIn(text_81)) {
                continueRoutine = false;
            }
        }
  Routine practica_musica
    TextComponent text_66
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        ¿Has practicado algún instrumento musical (o el canto)?

        *marca la casilla correspondiente a tu respuesta*
    TextComponent text_67
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *pulsa espacio una vez que hayas seleccionado tu respuesta*
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    SliderComponent music_expertise_answer
      borderColor = black
      color = black
      fillColor = -1.0000, 1.0000, 1.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = ('No','Si')
      letterHeight = 0.04
      saveStartStop = False
      size = (0.2, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0,1)
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    CodeComponent code_15
      Code Type = JS
      Begin JS Routine:
        event.clearEvents();
      Each JS Frame:
        if (music_expertise_answer.getRating() !== undefined) {
            keys= psychoJS.eventManager.getKeys({keyList: ['space']});
            if (keys.length > 0) {
                continueRoutine= false;
            }
        }else{
            event.clearEvents();
        }
  Routine music_start
    TextComponent text_65
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        ¡Gracias! Ahora seguiremos con algunas preguntas sobre tu experiencia y habitos en ambito musical.

        *pulsa espacio continuar*
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trastorno_auditivo
    TextComponent text_63
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        ¿Tienes algún problema auditivo?

        *marca la casilla correspondiente a tu respuesta*
    TextComponent text_64
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *pulsa espacio una vez que hayas seleccionado tu respuesta*
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    SliderComponent aud_deficit_answer
      borderColor = black
      color = black
      fillColor = -1.0000, 1.0000, 1.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = ('No','Si')
      letterHeight = 0.04
      saveStartStop = False
      size = (0.2, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0,1)
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    CodeComponent code_14
      Code Type = JS
      Begin JS Routine:
        event.clearEvents();
      Each JS Frame:
        if (aud_deficit_answer.getRating() !== undefined) {
            keys= psychoJS.eventManager.getKeys({keyList: ['space']});
            if (keys.length > 0) {
                continueRoutine= false;
            }
        }else{
            event.clearEvents();
        }
  Routine trastorno_lenguaje
    TextComponent text_61
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        ¿Tienes diagnosticado algún trastorno de lenguaje (e.g., Dislexia, Trastorno especifico del lenguaje)?

        *marca la casilla correspondiente a tu respuesta*
    TextComponent text_62
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *pulsa espacio una vez que hayas seleccionado tu respuesta*
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    SliderComponent lan_deficit_answer
      borderColor = black
      color = black
      fillColor = -1.0000, 1.0000, 1.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = ('No','Si')
      letterHeight = 0.04
      saveStartStop = False
      size = (0.2, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0,1)
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    CodeComponent code_13
      Code Type = JS
      Begin JS Routine:
        event.clearEvents();
      Each JS Frame:
        if (lan_deficit_answer.getRating() !== undefined) {
            keys= psychoJS.eventManager.getKeys({keyList: ['space']});
            if (keys.length > 0) {
                continueRoutine= false;
            }
        }else{
            event.clearEvents();
        }
  Routine tendence_mixlang_2
    TextComponent text_59
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        ¿Cuál es tu tendencia a mezclar palabras o oraciones de diferentes idiomas cuando hablas?

        *marca la casilla correspondiente a tu respuesta*
    TextComponent text_60
      color = black
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *pulsa espacio una vez que hayas seleccionado tu respuesta*
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    SliderComponent tendence_mixlang_answer
      borderColor = -1.0000, -1.0000, -1.0000
      color = black
      fillColor = -1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      labels = ( 'Absente','Muy débil', 'Débil', 'Moderado', 'Fuerte',' Muy fuerte','Extrema' )
      letterHeight = 0.04
      pos = (0,-0.05)
      saveStartStop = False
      size = (0.03, 0.35)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0,1,2,3,4,5,6)
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    CodeComponent code_12
      Code Type = JS
      Begin JS Routine:
        event.clearEvents();
      Each JS Frame:
        if (tendence_mixlang_answer.getRating() !== undefined) {
            keys= psychoJS.eventManager.getKeys({keyList: ['space']});
            if (keys.length > 0) {
                continueRoutine= false;
            }
        }else{
            event.clearEvents();
        }
  Routine ability_learn_language
    TextComponent text_57
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Evalúa tu habilidad para aprender idiomas. En otras palabras, ¿Cuán bueno/a sientes que eres aprendiendo nuevos idiomas comparado con tus amigos y otras personas que conoces?

        *marca la casilla correspondiente a tu respuesta*
    TextComponent text_58
      color = black
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *pulsa espacio una vez que hayas seleccionado tu respuesta*
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    SliderComponent ability_learnL2_answer
      borderColor = -1.0000, -1.0000, -1.0000
      color = black
      fillColor = -1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      labels = ('Muy mala', 'Mala', 'Limitada','Funcional', 'Buena', 'Muy buena', 'Como nativo')
      letterHeight = 0.04
      pos = (0,-0.05)
      saveStartStop = False
      size = (0.03, 0.35)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0,1,2,3,4,5,6)
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    CodeComponent code_11
      Code Type = JS
      Begin JS Routine:
        event.clearEvents();
      Each JS Frame:
        if (ability_learnL2_answer.getRating() !== undefined) {
            keys= psychoJS.eventManager.getKeys({keyList: ['space']});
            if (keys.length > 0) {
                continueRoutine= false;
            }
        }else{
            event.clearEvents();
        }
  Routine language_use
    TextComponent text_46
      color = black
      letterHeight = 0.04
      opacity = 1.3
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        ¿Actualmente, cuántos idiomas utilizas diariamente?

        *Introduce en la casilla el número correspondiente *
    TextboxComponent N_lang_use_answer
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent text_82
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa aquí para continuar.
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    MouseComponent mouse_6
      clickable = text_77
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = JS
      Each JS Frame:
        if (N_lang_use_answer.getText()!== '') {
            if (mouse.isPressedIn(text_82)) {
                continueRoutine = false;
            }
        }
  Routine language_type_age
    TextComponent text_9
      color = black
      letterHeight = 0.04
      opacity = 1.5
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Por favor, para cada casilla escribe uno de los idiomas que hablas. En la casilla correspondiente al lado, indica la edad a la cual empezaste a hablar/estudiar el idioma de interés. Para tu lengua materna pon ‘0’.
      wrapWidth = 1.3
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    TextComponent text_50
      color = black
      letterHeight = 0.04
      opacity = 1.3
      pos = (-0.25,0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Idioma:
      wrapWidth = 1.3
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    TextboxComponent langtype_answer_1
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      flipVert = True
      letterHeight = 0.03
      pos = (-0.25, 0.13)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent text_51
      color = black
      letterHeight = 0.04
      opacity = 1.3
      pos = (0.25,0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Edad en la cúal empezaste:
      wrapWidth = 1.3
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    TextboxComponent langage_answer_1
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.03
      pos = (0.25, 0.13)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent text_81
      color = black
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa aquí para continuar.
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    TextboxComponent langtype_answer_2
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      flipVert = True
      letterHeight = 0.03
      pos = (-0.25, 0.06)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent langage_answer_2
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.03
      pos = (0.25, 0.06)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent langtype_answer_3
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      flipVert = True
      letterHeight = 0.03
      pos = (-0.25, -0.01)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent langage_answer_3
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.03
      pos = (0.25, -0.01)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent langtype_answer_4
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      flipVert = True
      letterHeight = 0.03
      pos = (-0.25, -0.08)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent langage_answer_4
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.03
      pos = (0.25, -0.08)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent langtype_answer_5
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      flipVert = True
      letterHeight = 0.03
      pos = (-0.25, -0.15)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent langage_answer_5
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.03
      pos = (0.25, -0.15)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent langtype_answer_6
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      flipVert = True
      letterHeight = 0.03
      pos = (-0.25, -0.22)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    TextboxComponent langage_answer_6
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.03
      pos = (0.25, -0.22)
      saveStartStop = False
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = JS
      Each JS Frame:
        if (langtype_answer_1.getText()!== '' && langage_answer_1.getText() !== '') {
            if (mouse.isPressedIn(text_81)) {
                continueRoutine = false;
            }
        }
  Routine language_n
    TextComponent text_52
      color = black
      letterHeight = 0.04
      opacity = 1.3
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        ¿Cuántos idiomas hablas en total (incluyendo tu lengua materna)?

        *Introduce en la casilla el número correspondiente *
    TextboxComponent N_language_answer
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent text_80
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa aquí para continuar.
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    MouseComponent mouse_4
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = JS
      Each JS Frame:
        if (N_language_answer.getText()!== '') {
            if (mouse.isPressedIn(text_80)) {
                continueRoutine = false;
            }
        }
  Routine language_start
    TextComponent text_56
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        ¡Gracias! Ahora seguiremos con algunas preguntas sobre tus hábitos y experiencias lingüísticas.

        *pulsa espacio continuar*
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine handedness
    TextComponent text_54
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        ¿Cuál es tu mano dominante?

        *marca la casilla correspondiente a tu respuesta*
    TextComponent text_55
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *pulsa espacio una vez que hayas seleccionado tu respuesta*
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    SliderComponent hand_answer
      borderColor = black
      color = black
      fillColor = -1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      labels = ('Las dos (ambidestro)', 'Izquierda', 'Derecha')
      letterHeight = 0.04
      saveStartStop = False
      size = (0.03, 0.2)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0,1,2)
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    CodeComponent code_7
      Code Type = JS
      Begin JS Routine:
        event.clearEvents();
      Each JS Frame:
        if (hand_answer.getRating() !== undefined) {
            keys= psychoJS.eventManager.getKeys({keyList: ['space']});
            if (keys.length > 0) {
                continueRoutine= false;
            }
        }else{
            event.clearEvents();
        }
  Routine level_of_education
    TextComponent text_53
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        ¿Cuál es tu nivel máximo de formación académica?

        *marca la casilla correspondiente a tu respuesta*
    TextComponent text_70
      color = black
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *pulsa espacio una vez que hayas seleccionado tu respuesta*
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    SliderComponent education_answer
      borderColor = -1.0000, -1.0000, -1.0000
      color = black
      fillColor = -1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      labels = ('Secundaria', 'Bachillerato', 'Grado/Licenciatura', 'Máster','Doctorado','Otro' )
      letterHeight = 0.04
      pos = (0,-0.05)
      saveStartStop = False
      size = (0.03, 0.3)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0,1,2,3,4,5)
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    CodeComponent code_6
      Code Type = JS
      Begin JS Routine:
        event.clearEvents();
      Each JS Frame:
        if (education_answer.getRating() !== undefined) {
            keys= psychoJS.eventManager.getKeys({keyList: ['space']});
            if (keys.length > 0) {
                continueRoutine= false;
            }
        }else{
            event.clearEvents();
        }
  Routine sex
    TextComponent text_71
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        ¿Cuál es tu sexo?

        *marca  la casilla correspondiente a tu respuesta*
    TextComponent text_72
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *pulsa espacio una vez que hayas seleccionado tu respuesta*
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    SliderComponent sex_answer
      borderColor = black
      color = black
      fillColor = -1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 1
      labels = ('Intersexual', 'Masculino', 'Feminino')
      letterHeight = 0.04
      saveStartStop = False
      size = (0.03, 0.2)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0,1,2)
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    CodeComponent code_5
      Code Type = JS
      Begin JS Routine:
        event.clearEvents();
      Each JS Frame:
        if (sex_answer.getRating() !== undefined) {
            keys= psychoJS.eventManager.getKeys({keyList: ['space']});
            if (keys.length > 0) {
                continueRoutine= false;
            }
        }else{
            event.clearEvents();
        }
  Routine native_languages
    TextComponent text_3
      color = black
      letterHeight = 0.04
      opacity = 1.5
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        ¿Cuál és/son tu/s lengua/s materna/s?

        *Para cada casilla introduzca la/una de tu/s lengua/s materna/s*
    TextComponent text_5
      color = black
      letterHeight = 0.04
      opacity = 1.3
      pos = (-0.17,0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Lengua materna 1:
      wrapWidth = 1.3
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    TextboxComponent native_language1_answer
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.04
      pos = (0.2, 0.105)
      saveStartStop = False
      size = (0.35, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_73
      color = black
      letterHeight = 0.04
      opacity = 1.3
      pos = (-0.17,-0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Lengua materna 2:
      wrapWidth = 1.3
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    TextboxComponent native_language_2_answer
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.04
      pos = (0.2,-0.045)
      saveStartStop = False
      size = (0.35, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent text_79
      color = black
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa aquí para continuar.
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    TextComponent text_74
      color = black
      letterHeight = 0.04
      opacity = 1.3
      pos = (-0.17,-0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Lengua materna 3:
      wrapWidth = 1.3
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    TextboxComponent native_language_3_answer
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.04
      pos = (0.2,-0.195)
      saveStartStop = False
      size = (0.35, 0.08)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_18
      Code Type = JS
      Begin JS Routine:
        event.clearEvents();
      Each JS Frame:
        if (native_language1_answer.getText()!== '') {
            if (mouse.isPressedIn(text_79)) {
                continueRoutine = false;
            }
        }
  Routine residence
    TextComponent text_75
      color = black
      letterHeight = 0.04
      opacity = 1.3
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        ¿Cuál es tu país de residencia?

        *Introduce en la casilla tu respuesta*
    TextboxComponent residence_answer
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent text_78
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa aquí para continuar.
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    MouseComponent mouse_2
      clickable = text_77
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_19
      Code Type = JS
      Begin JS Routine:
        event.clearEvents();
      Each JS Frame:
        if (residence_answer.getText()!== '') {
            if (mouse.isPressedIn(text_78)) {
                continueRoutine = false;
            }
        }
  Routine age
    TextComponent text_76
      color = black
      letterHeight = 0.04
      opacity = 1.3
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        ¿Cuál es tu edad?

        *Introduce en la casilla el número correspondiente a tu edad *
    TextboxComponent age_answer
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent text_77
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa aquí para continuar.
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    MouseComponent mouse_8
      clickable = text_77
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_20
      Code Type = JS
      Begin JS Routine:
        event.clearEvents();
      Each JS Frame:
        if (age_answer.getText()!== '') {
            if (mouse.isPressedIn(text_77)) {
                continueRoutine = false;
            }
        }
  Routine Initial_questionnaire
    TextComponent text_84
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Antes de comenzar con el experimento, te pediremos que respondas algunas preguntas. Después de pedirte algunas informaciones demográficas, te solicitaremos que respondas a una serie de preguntas que nos ayudarán a obtener información sobre tus experiencias en los ámbitos lingüístico y musical.

        *pulsa espacio para continuar*
    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Consent_2
    TextComponent text_85
      color = black
      letterHeight = 0.04
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        La participación en el estudio es libre y voluntaria. En cualquier momento la persona podrá retirarse del estudio y siempre agradeceremos su participación. Los datos de este estudio podrán ser compartidos de manera libre y abierta, por lo que puede que se reutilicen en otros futuros proyectos de investigación. Los datos de las/os participantes serán anónimos en todo caso, siguiendo las recomendaciones generales de la Agencia Española de Protección de Datos (https://www.aepd.es/sites/default/files/2019-12/guia-orientaciones-procedimientos- anonimizacion.pdf). En aquellas situaciones en las que sea necesario retener la identidad de la persona, los archivos asociando su nombre con el código/clave de sus datos se mantendrán en ordenadores protegidos por contraseña de seguridad y/o en archivadores bajo llave custodiada por el/la investigador/ra principal, segregando totalmente la información. Los datos serán utilizados para su análisis y posterior estudio por el/la investigador/a principal y las/os miembros del grupo investigador.

        Previa lectura de la información sobre el tratamiento de datos:
    TextComponent treatment_data_accepted
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsando aquí declaras: "Doy mi consentimiento para el tratamiento de mis datos personales"
      wrapWidth = 1.5
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    TextComponent treatment_data_refused
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsando aquí declaras: "No doy mi consentimiento para el tratamiento de mis datos personales, quiero salir del estudio’.
      wrapWidth = 1.5
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    MouseComponent consent2
      clickable = treatment_data_accepted, treatment_data_refused
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_21
      Code Type = JS
      Each JS Frame:
        if (mouse.isPressedIn(treatment_data_accepted)) {
                continueRoutine = false;
        }

        if (mouse.isPressedIn(treatment_data_refused)) {
            psychoJS.quit("User declined informed consent");
        }
  Routine Consent
    TextComponent text_86
      color = black
      letterHeight = 0.04
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        ¡Hola! Gracias por participar en el estudio: Predicciones temporales en el sistema motor y su relación con el aprendizaje del lenguaje (TEMPLA).

        Continuando por este estudio, declaras que:

        • Has leído la hoja de información que te se ha entregado.
        • Has podido hacer preguntas sobre el estudio.
        • Has recibido suficiente información sobre el estudio.
        • Comprendes que tu participación es voluntaria.
        • Comprendes que tus datos podrán ser compartidos y reutilizados por otras/os investigadoras/es, sin prejuicio del compromiso de confidencialidad.
        • Comprendes que puedes retirarte del estudio cuando quieras y sin tener que dar explicaciones.
        • Prestas libremente tu conformidad para participar en el estudio.
    TextComponent informed_consent_accepted
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Pulsando aquí declaras: 'Estoy de acuerdo con estas declaraciones y quiero seguir con el experimento'.
    TextComponent informed_consent_refused
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Pulsando aquí declaras: 'No estoy de acuerdo con estas declaraciones y quiero salir del experimento'.
    MouseComponent consent1
      clickable = informed_consent_accepted, informed_consent_refused
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_22
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
      Each JS Frame:
        if (mouse.isPressedIn(informed_consent_accepted)) {
                continueRoutine = false;
        }

        if (mouse.isPressedIn(informed_consent_refused)) {
            psychoJS.quit("User declined informed consent");
        }
  Routine instrument_use
    TextComponent text_87
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        ¿Actualmente practicas algún instrumento musical (o el canto)?

        *marca la casilla correspondiente a tu respuesta*
    TextComponent text_88
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = *pulsa espacio una vez que hayas seleccionado tu respuesta*
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    SliderComponent instrument_use_answer
      borderColor = black
      color = black
      fillColor = -1.0000, 1.0000, 1.0000
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = ('No','Si')
      letterHeight = 0.04
      saveStartStop = False
      size = (0.2, 0.03)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0,1)
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    CodeComponent code_23
      Code Type = JS
      Begin JS Routine:
        event.clearEvents();
      Each JS Frame:
        if (instrument_use_answer.getRating() !== undefined) {
            keys= psychoJS.eventManager.getKeys({keyList: ['space']});
            if (keys.length > 0) {
                continueRoutine= false;
            }
        }else{
            event.clearEvents();
        }
  Routine native_language_2
    TextComponent text_89
      color = black
      letterHeight = 0.04
      opacity = 1.3
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        ¿Cuál és/son tu/s lengua/s materna/s?

        *Introduce en la casilla tu/s lengua/s materna/s *
    TextboxComponent native_lang_answer
      alignment = top-left
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent text_90
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa aquí para continuar.
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    MouseComponent mouse_9
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_24
      Code Type = JS
      Each JS Frame:
        if (native_lang_answer.getText()!== '') {
            if (mouse.isPressedIn(text_90)) {
                continueRoutine = false;
            }
        }
  Routine offline_listening
    SoundComponent learning
      saveStartStop = False
      sound [set every repeat] = $audio_offline
      startVal [time (s)] = 0
      stopVal [duration (s)] = 172
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    TextComponent text_19
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 172
      text = *
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Flow
  Routine Consent
  Routine Consent_2
  Routine Initial_questionnaire
  Routine age
  Routine residence
  Routine native_language_2
  Routine sex
  Routine level_of_education
  Routine handedness
  Routine language_start
  Routine language_n
  Routine language_type_age
  Routine language_use
  Routine ability_learn_language
  Routine tendence_mixlang_2
  Routine trastorno_lenguaje
  Routine trastorno_auditivo
  Routine music_start
  Routine practica_musica
  Routine instrument_age
  Routine instrument_use
  Routine partitura
  Routine intro_questionaire1
  LoopInitiator BMRQ loopType="TrialHandler"
    conditionsFile = Questionnaire_music1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('preguntas_musica1', '1. Cuando comparto música con alguien siento una complicidad especial con aquella persona.')]),
      OrderedDict([('preguntas_musica1', '2. En mi tiempo libre apenas escucho música.')]),
      OrderedDict([('preguntas_musica1', '3. Algunas canciones me ponen los pelos de punta')]),
      OrderedDict([('preguntas_musica1', '4. La música me hace compañía cuando estoy solo')]),
      OrderedDict([('preguntas_musica1', '5. No me apetece bailar ni con la música que más me gusta')]),
      OrderedDict([('preguntas_musica1', '6. La música me hace conectar con la gente')]),
      OrderedDict([('preguntas_musica1', '7. Me informo sobre la música que me gusta.')]),
      OrderedDict([('preguntas_musica1', '8.Me emociono escuchando ciertas canciones.')]),
      OrderedDict([('preguntas_musica1', '9.La música me tranquiliza y me relaja.')]),
      OrderedDict([('preguntas_musica1', '10.La música me hace bailar')]),
      OrderedDict([('preguntas_musica1', '11.Busco novedades musicales continuamente')]),
      OrderedDict([('preguntas_musica1', '12. Puedo llorar cuando escucho algunas melodías que me gustan mucho.')]),
      OrderedDict([('preguntas_musica1', '13. Me gusta cantar o tocar un instrumento con más gente')]),
      OrderedDict([('preguntas_musica1', '14. La música me ayuda a desconectar.')]),
      OrderedDict([('preguntas_musica1', '15. No puedo evitar tararear las canciones que me gustan cuando las escucho.')]),
      OrderedDict([('preguntas_musica1', '16. En los conciertos me siento en sintonía con los artistas y el público.')])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
    Routine firs_questionaire_intro
  LoopTerminator BMRQ
  Routine welcome1
  Routine welcomw
  Routine volume
  Routine volume_setting
  Routine instructions_2
  Routine Instructions_0
  Routine Instructions_task_1
  Routine Intructions_task2
  Routine ready_
  Routine ready_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condsA.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('seq', 'ConjL1_uns.csv'), ('online_dir', 'dir_Online_conjL1_un.csv'), ('test_dir', 'Test_Conj_UnsyncL1.csv'), ('audio_offline', 'ConjL1_unsync_norm.wav')]),
      OrderedDict([('seq', 'WhatL2_uns.csv'), ('online_dir', 'directory_online_WHAT_L2_uns.csv'), ('test_dir', 'What_UnsyncL2_testdirs.csv'), ('audio_offline', 'WhatL2_unsync_norm.wav')]),
      OrderedDict([('seq', 'WhenL3_uns.csv'), ('online_dir', 'directory_online_whenL3_uns.csv'), ('test_dir', 'When_UnsyncL3_testdirs.csv'), ('audio_offline', 'WhenL3_unsync_norm.wav')]),
      OrderedDict([('seq', 'ConjL4_syn.csv'), ('online_dir', 'directory_online_conj_L4_syn.csv'), ('test_dir', 'Test_Conj_SyncL4.csv'), ('audio_offline', 'ConjL4_sync_norm.wav')])]
    Routine ready_loop
    Routine offline_listening
    Routine Task_1
    LoopInitiator Online_loop loopType="TrialHandler"
      conditionsFile = $seq
      loopType = random
      nReps = 1
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      Routine instructions
      LoopInitiator audios_online loopType="TrialHandler"
        Selected rows = $ord
        conditionsFile = $online_dir
        loopType = random
        nReps = 1
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        Routine sequences
      LoopTerminator audios_online
    LoopTerminator Online_loop
    Routine test_instructions
    Routine test_instructions2
    LoopInitiator Offline_test loopType="TrialHandler"
      conditionsFile = $test_dir
      loopType = random
      nReps = 1
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      Routine audio
      Routine question1
      Routine question_2
    LoopTerminator Offline_test
    Routine Next_langauge
  LoopTerminator trials
  Routine preguntas_rhytmos
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = questions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('pregunta', '¿Cuál de los cuatro lenguajes te parece más complejo?'), ('L1', 'ConjL1_unsync.wav'), ('L2', 'WhatL2_unsync.wav'), ('L3', 'WhenL3_unsync.wav'), ('L4', 'ConjL4_sync.wav')]),
      OrderedDict([('pregunta', '¿Cuál de los cuatro lenguajes te gusta más?'), ('L1', 'ConjL1_unsync.wav'), ('L2', 'WhatL2_unsync.wav'), ('L3', 'WhenL3_unsync.wav'), ('L4', 'ConjL4_sync.wav')])]
    Routine question
    Routine question_answer
  LoopTerminator trials_2
  Routine gracias_2
  Routine comentario
